PsychoPy2experiment version="3.0.0"
Settings
  Completed URL = completedURL
  Enable Escape = False
  Experiment info = {u'participant': u''}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = LG OLED
  Save log file = False
  Save psydat file = False
  Screen = 2
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1600, 1200]
  color = $[-1,-1,-1]
  expName = Grating acuity test
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random
        import math
        from psychopy.tools.monitorunittools import deg2pix

        win.allowStencil=True

        duty_cycle = float(expInfo['duty cycle [0.0 - 1.0]'])
        background_color = expInfo['background color']
        bright_stripes_color = expInfo['bright stripes color']
        dark_stripes_color = expInfo['dark stripes color']
        win.color = background_color
        diameter = float(expInfo['Aperture diameter (degree)'])

        degrees = {'left' : 90, 'up' : 0, 'pageup' : 45, 'home' : 135}
        key_mapping = {'left' : 'left', 'up' : 'up', 'pageup': 'pageup', 'home' : 'home', 'right' : 'left', 'down' : 'up', 'end' : 'pageup', 'pagedown' : 'home', 'num_left' :'left', 'num_right' : 'left', 'num_up' : 'up', 'num_down' : 'up', 'num_prior' : 'pageup', 'num_next' : 'home', 'num_pageup' : 'pageup', 'num_home' : 'home', 'num_7' : 'home', 'num_8' : 'up', 'num_9' : 'pageup', 'num_4' : 'left', 'num_6' : 'left', 'num_1' : 'pageup', 'num_2' : 'up', 'num_3' : 'home', 'num_end' : 'pageup'}
        orientation_char = { 0 : '|', 45 : '/', 90 : '-', 135 : '\\' }

        aperture = visual.Aperture(win, size=(2 * deg2pix(diameter, win.monitor) / win.size[0], 2 * deg2pix(diameter, win.monitor) / win.size[1]), autoLog=False)
        aperture.enabled = False

        failed = False
        repetition = 0


        win_control = visual.Window(
            size=[500, 250], fullscr=False, screen=2,
            allowGUI=True, allowStencil=False,
            monitor=u'testMonitor', color=[-1,-1,-1], colorSpace='rgb',
            blendMode='avg', useFBO=True)

        control_text = visual.TextStim(win_control, pos=[0, 0])
        control_text.size=[2, 2]
      Begin Routine:
        staircase = trials.staircases[0]

        orientation = random.choice(degrees.keys())

        degree = degrees[orientation]

        sf = -level

        stripe_width = 1.0 / (2.0 * sf) * duty_cycle / 0.5

        count = int(math.ceil(diameter * sf / 2.0))

        stim_list = []
        stim_list.append(visual.Rect(win=win, name='background', units='deg', width=diameter, height=diameter, ori=0, pos=(0,0), lineWidth=0, lineColor=[1,1,1], lineColorSpace='rgb',fillColor=bright_stripes_color, fillColorSpace='rgb',opacity=1, interpolate=True, autoLog=False))

        for i in range(-count, count+1):
            shift = i / sf
            bl = 1

            if degree == 0:
                pos_white = (shift, 0)
            elif degree == 90:
                pos_white = (0, shift)
            elif degree == 45 or degree == 135:
                bl = 2*sqrt(2)
                pos_white = (shift * sqrt(2), 0)

            stim_list.append(visual.Rect(win=win, name=('polygon_dark_%d' % i),units='deg', width=stripe_width, height=diameter*bl,ori=degree, pos=pos_white, lineWidth=0, lineColor=[1,1,1], lineColorSpace='rgb',fillColor=dark_stripes_color, fillColorSpace='rgb',opacity=1, interpolate=True, autoLog=False))

        aperture.enabled = True
        buffer = visual.BufferImageStim(win, interpolate=False, stim=stim_list, rect=(-1, 1, 1, -1), autoLog=False)
        aperture.enabled = False

        repetition += 1


        control_text.text = (u'Trial: %d\nOrientation: %s (%d°)\nSpatial frequency: %.2f cpd\nCI: %.2f [%.2f; %.2f]' % (repetition, orientation_char[degree], degree, sf, staircase.confInterval(getDifference=True), -staircase.confInterval()[1], -staircase.confInterval()[0]))
        control_text.draw()
        win_control.update()
      Each Frame:
        if t > 0.5:
            buffer.draw()
      End Routine:
        if key_resp_2.keys == 'q':
            core.quit()

        # Response correct (including opposite key and numpad)?
        if (key_resp_2.keys and key_mapping[key_resp_2.keys] == orientation):
            key_resp_2.corr = 1
        else:
            key_resp_2.corr = 0


        trials.addResponse(key_resp_2.corr)


        thisExp.addData('spatial frequency (cpd)', sf)
        thisExp.addData('orientation (degree)', degree)
        thisExp.addData('key pressed', key_resp_2.keys)
        thisExp.addData('correct', 'true' if key_resp_2.corr == 1 else 'false')
        thisExp.addData('response time', key_resp_2.rt)

        if repetition >= nTrials:
            failed = True
    TextComponent Info
      color = red
      durationEstim = 30.5
      letterHeight = 0.02
      pos = (-0.9, -0.9)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $(timeout + 0.5)
      text [set every repeat] = $('Trial: %d\nSpatial frequency: %.2f cpd\nCI: %.2f [%.2f; %.2f]' % (repetition, sf, staircase.confInterval(getDifference=True), -staircase.confInterval()[1], -staircase.confInterval()[0]))
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
    KeyboardComponent key_resp_2
      allowedKeys = 'left', 'right', 'up', 'down', 'pageup', 'pagedown', 'home', 'end', 'q', 'num_left', 'num_up', 'num_right', 'num_down', 'num_home', 'num_end', 'num_pageup', 'num_pagedown', 'num_prior', 'num_next', 'num_1', 'num_2', 'num_3', 'num_4', 'num_6', 'num_7', 'num_8', 'num_9'
      correctAns = $orientation
      durationEstim = 30
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $timeout
      syncScreenRefresh = False
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    SoundComponent sound_1
      sound = 880
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.1
      volume [set every repeat] = 1 if feedback > 0 else 0
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  Routine end
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      store = nothing
      syncScreenRefresh = False
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    ImageComponent image
      image = None
      opacity [set every repeat] = 0 if failed else 1
      pos = (0, 0.2)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    CodeComponent create_result
      Code Type = Py
      Begin Experiment:
        from psychopy import data, gui, core
        import pylab
      Begin Routine:
        if not failed:
        #    intensities = staircase.intensities
        #    intensities = [-1 * x for x in intensities]

        #    intensity, meanCorrect, n = data.functionFromStaircase(intensities, staircase.data, 'unique')


        #    fit = data.FitWeibull(intensity, meanCorrect)
        #    smoothInt = pylab.arange(min(intensity), max(intensity), 0.001)
        #    smoothResp = fit.eval(smoothInt)
        #    thresh = fit.inverse(pThreshold)


         #   pylab.title('threshold = %.2f' %(thresh))
         #   pylab.ylim([-0.1, 1.1])

        #    pylab.plot(smoothInt, smoothResp, '-')
        #    pylab.plot(intensity, meanCorrect, 'o')
        #    pylab.plot([thresh, thresh],[0, pThreshold],'--')
        #    pylab.plot([0, thresh],[pThreshold, pThreshold],'--')

        #    pylab.savefig(filename+'.png', dpi=100, transparent=False)
        #    image.setImage(filename+'.png')

            mean = -staircase.mean()
            sd = staircase.sd()

            print('N: %d' % repetition)
         #   print('Threshold: %.2f' % thresh)
            print('Mean: %.2f +- %.2f' % (mean, sd))
    TextComponent result_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text [set every repeat]:
        $('End' if failed else $('End\nN: %d\nMean (SD): %.2f (%.2f) cpd' % (repetition, mean, sd)))
    SoundComponent sound_3
      sound = Ta Da-SoundBible.com-1884170640.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      volume [set every repeat] = 1 if feedback > 0 else 0
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  Routine feedback
    SoundComponent sound_2
      sound [set every repeat] = $(1760 if key_resp_2.corr == 1 else 440)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume [set every repeat] = 1 if feedback > 1 else 0
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    StaticComponent ISI_2
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.5
  Routine start
    CodeComponent dialog
      Code Type = Py
      Begin Experiment:
        win.allowGUI=True

        dlg2 = gui.Dlg(title=expName, screen=-1)

        dlg2.addText(u'Test details')
        dlg2.addField(u'participant')
        dlg2.addField(u'session', u'001')
        dlg2.addField(u'comment')
        dlg2.addText(u'Settings')
        dlg2.addField(u'Feedback', choices=['Start only', 'No feedback', 'Start and feedback'])
        dlg2.addField(u'timeout (s)', u'30')
        dlg2.addField(u'duty cycle [0.0 - 1.0]', u'0.5')
        dlg2.addField(u'Aperture diameter (degree)', u'16')
        dlg2.addField(u'bright stripes color', choices=['white', 'red', 'green', 'yellow', 'blue'])
        dlg2.addField(u'dark stripes color', choices=['black', 'red', 'green', 'yellow', 'blue'])
        dlg2.addField(u'background color', choices=[u'black', u'grey', u'white'])

        init_data = dlg2.show()
        if dlg2.OK:
            expInfo['participant'] = init_data[0]
            expInfo['session'] = init_data[1]
            expInfo['comment'] = init_data[2]
            expInfo['feedback'] = init_data[3]
            expInfo['timeout (s)'] = init_data[4]
            expInfo['duty cycle [0.0 - 1.0]'] = init_data[5]
            expInfo['Aperture diameter (degree)'] = init_data[6]
            expInfo['bright stripes color'] = init_data[7]
            expInfo['dark stripes color'] = init_data[8]
            expInfo['background color'] = init_data[9]

            filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
            timeout = float(expInfo['timeout (s)'])
            win.allowGUI=False
            if expInfo['feedback'] == 'No feedback':
                feedback = 0
            elif expInfo['feedback'] == 'Start only':
                feedback = 1
            else:
                feedback = 2
        else:
            core.quit()  # user pressed cancel
  Routine failed
    TextComponent text_2
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = failed!
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine start
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [OrderedDict([(u'label', u'QUEST'), (u'startVal', 0.25), (u'startValSd', 3), (u'pThreshold', 0.82), (u'nTrials', 80), (u'stopInterval', 0.2), (u'method', u'quantile'), (u'beta', 3.5), (u'delta', 1), (u'gamma', 0.25), (u'grain', 0.01), (u'minVal', 0.02), (u'maxVal', 6)])]
    conditionsFile = staircase.xlsx
    loopType = interleaved staircases
    nReps = 1
    stairType = quest
    switchMethod = sequential
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    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine end
